PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = pirateTrial
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Routines
  Routine studyTrial
    ImageComponent background
      image = stimuli/piratetask.bmp
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = left
      forceEndRoutine = True
      startVal [time (s)] = 2
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        # Code in here is run at the very beginning of the experiment
        # Put stuff here that you need to run once but doesn't change

        imagePath = "stimuli/" # This establishes where the stimuli are stored
        imageVariable = None # Need this to initialise the feedback image display

        # I've left this here just in case you need it, but it's commented out so won't run

        #Lbluewin = "Lbluewin.bmp"
        #Lbluelose = "Lbluelose.bmp"
        #Rbluewin = "Rbluewin.bmp"
        #Rbluelose = "Rbluelose.bmp"
        #Lgreenwin = "Lgreenwin.bmp"
        #Lgreenlose = "Lgreenlose.bmp"
        #Rgreenwin = "Rgreenwin.bmp"
        #Rgreenlose = "Rgreenlose.bmp"
      End Routine:
        # This code will run at the end of the routine in which it is placed
        # Useful for making adjustments to the following routine based on responses in the current routine

        # Ensure that the object you are accessing ('key_resp') is the named exactly the same here as in the builder
        if key_resp.keys == 'left': # Start by checking which key was pressed
            if key_resp.corr: # Then see if the response was correct
                imageVariable = imagePath + "Lgreenwin.bmp" # If yes then display the treasure
            else:
                imageVariable = imagePath + "Lgreenlose.bmp" # Otherwise show the empty chest
        elif key_resp.keys == 'right': # Same as above but on the other side
            if key_resp.corr:
                imageVariable = imagePath + "Rbluewin.bmp" # The predefined image path is added to the file name
            else:
                imageVariable = imagePath + "Rbluelose.bmp"

        # Use this to set the image in the following routine
        # Again be sure that the object called is named the same thing as the object in the builder
        image.setImage(imageVariable)
  Routine feedback
    ImageComponent image
      image [set every repeat] = $imageVariable
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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Flow
  Routine studyTrial
  Routine feedback
